PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'operations': u"'+-*/'", u'participant': u'', u'scanner': u"''"}
  Units = use prefs
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  expName = math_task
  Screen = 1
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Routines
  Routine trial
    TextComponent MATH_TEXT_BOX
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $MATH_TEXT
    KeyboardComponent MATH_TEXT_RESPONSE
      correctAns = $MATH_CORR
      storeCorrect = True
      stopVal [duration (s)] = 5
      forceEndRoutine = True
      allowedKeys = '1', '2', '3'
      startVal [time (s)] = 0.0
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    CodeComponent MATH_TEXT_CODE
      Begin Routine:
        num_one = np.random.randint(0, 99)
        num_two = np.random.randint(0, 99)
        operator = expInfo['operations'][np.random.randint(0, len(expInfo['operations']))]

        MATH_TEXT = '{0} {1} {2}'.format(num_one, operator, num_two)

        if eval(MATH_TEXT) < 5:
            MATH_CORR = '1'
        elif eval(MATH_TEXT) == 5:
            MATH_CORR = '2'
        else:
            MATH_CORR = '3'
    PolygonComponent MATH_FIX
      fillColor = $[1,1,1]
      stopVal [duration (s)] = .5
      startVal [time (s)] = 5
      nVertices = 99
      size = (0.1, 0.1)
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  Routine feedback
    TextComponent FEEDBACK_TEXT_BOX
      text [set every repeat] = $FEEDBACK_TEXT
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    StaticComponent ISI
      stopVal [duration (s)] = 5
      startVal [time (s)] = 1
    CodeComponent FEEDBACK_CODE
      Begin Experiment:
        FEEDBACK_TEXT = ''
      Begin Routine:
        print(MATH_TEXT_RESPONSE.corr)
        if MATH_TEXT_RESPONSE.corr:
            FEEDBACK_TEXT = 'Correct'
        else:
            FEEDBACK_TEXT = 'Incorrect'
  Routine instructions
    CodeComponent INSTRUCTION_CODE
      Begin Experiment:
        if expInfo['scanner']:
            INSTRUCTION_TEXT = \
            'You will be shown a series of formulas, \nyou must determine if the result is less than or greater than 5 \n      1 - Less Than  2 - Equal to  3 - Greater Than'
        else:
            INTRUSCTION_TEXT = \
            'You will be shown a series of formulas, \nyou must determine if the result is less than or greater than 5 \n      1 - Less Than  2 - Equal to  3 - Greater Than'
        MATH_TEXT = ''
        print(expInfo['operations'])
    TextComponent INSTRUCTION_TEXT_BOX
      text = $INSTRUCTION_TEXT
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent INSTRUCTION_END_RESP
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 99
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    Routine trial
    Routine feedback
  LoopTerminator trials
